CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Time>.*)_(?P<Well>.*)_(?P<Stack>.*)_ch(?P<ChannelNumber>[0-9]{1,2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['DNA: DNA stained with DAPI']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C=0")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C=1")
    Name to assign these images:mCherry
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C=2")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify nuclei']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
GrayToColor:[module_num:6|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notes:['Merge the 3 channels to RGB']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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:mCherry
    Select the image to be colored green:GFP
    Select the image to be colored blue:DAPI
    Name the output image:Merge
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
ColorToGray:[module_num:7|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notes:['Convert merged image from RGB to GrayScale']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
    Select the input image:Merge
    Conversion method:Combine
    Image type:RGB
    Name the output image:Merge_Gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifySecondaryObjects:[module_num:8|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notes:['Identify cells']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Merge_Gray
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureObjectIntensity:[module_num:9|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notes:['Measure mCherry and GFP intensities in each cell']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enabled:False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
    Select images to measure:GFP, mCherry
    Select objects to measure:Cells

MeasureObjectSizeShape:[module_num:10|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notes:['Measure the sizes and shapes of the cells to make sure the cells are normal']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enabled:False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
    Select object sets to measure:Cells
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Merge
    Name the output image:OrigSegmented
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:yellow
    Select objects to display:Cells
    Select outline color:blue
    Select objects to display:Nuclei

SaveImages:[module_num:12|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigSegmented
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OrigSegmented
    Saved file format:tiff
    Output file location:Elsewhere...|Desktop
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:13|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
    Select the input objects:Cells
    Name the output image:Cell
    Select the color format:uint16
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:Cell
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OrigSegmented
    Saved file format:tiff
    Output file location:Elsewhere...|D:\\MIT\\STARmap\\GFP-mCherry\\20210430-STARmap-48hrs\\Plate1+2\\output\\cell
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:15|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notes:['Export all kinds of measurements of each cell to Excel']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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\MIT\\STARmap\\GFP-mCherry\\20210413_protein
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
